PsychoPy2experiment version="2022.1.4"
Settings
  Completed URL = https://docs.google.com/document/d/1BbaksLJAaqA3zrqHnxBJxNQrtsoBsYjKnjnCehWT7jE/
  Data filename = u'data/%s_%s_%s' % (expInfo['participantID'], expName, expInfo['date'])
  Experiment info = {'participantID': 'UofA'}
  Full-screen window = True
  Incomplete URL = https://docs.google.com/document/d/1BbaksLJAaqA3zrqHnxBJxNQrtsoBsYjKnjnCehWT7jE/
  Monitor = laptop
  Resources = ['conditions/rewardVb1.csv', 'conditions/rewardVb2.csv', 'conditions/rewardVb3.csv', 'conditions/rewardVb4.csv', 'conditions/rewardVb5.csv', 'conditions/rewardVb6.csv', 'conditions/rewardVb7.csv', 'conditions/rewardVb8.csv', 'conditions/rewardVb9.csv', 'conditions/rewardVb10.csv', 'conditions/rewardVb11.csv', 'conditions/rewardVb12.csv', 'conditions/nonstat_conds_win.csv', 'conditions/prac_conditions_win.csv', 'conditions/rewardNSb1_Exp1.csv', 'conditions/rewardNSb2_Exp1.csv', 'conditions/rewardNSb3_Exp1.csv', 'conditions/rewardNSb4_Exp1.csv', 'conditions/rewardNSb5_Exp1.csv', 'conditions/rewardNSb6_Exp1.csv', 'conditions/rewardNSb7_Exp1.csv', 'conditions/rewardNSb8_Exp1.csv', 'conditions/rewardNSb9_Exp1.csv', 'conditions/rewardNSb10_Exp1.csv', 'conditions/rewardNSb11_Exp1.csv', 'conditions/rewardNSb12_Exp1.csv', 'conditions/rewardSb1_Exp1.csv', 'conditions/rewardSb2_Exp1.csv', 'conditions/rewardSb3_Exp1.csv', 'conditions/rewardSb4_Exp1.csv', 'conditions/rewardSb5_Exp1.csv', 'conditions/rewardSb6_Exp1.csv', 'conditions/rewardSb7_Exp1.csv', 'conditions/rewardSb8_Exp1.csv', 'conditions/rewardSb9_Exp1.csv', 'conditions/rewardSb10_Exp1.csv', 'conditions/rewardSb11_Exp1.csv', 'conditions/rewardSb12_Exp1.csv', 'conditions/stat_conds_win.csv', 'conditions/vol_conds_win.csv', 'slides/instructions/i1_1.png', 'slides/instructions/i1_2.png', 'slides/instructions/i1_3.png', 'slides/instructions/i2_1.png', 'slides/instructions/i2_2.png', 'slides/instructions/i2_3.png', 'slides/instructions/1.png', 'slides/instructions/2.png', 'slides/instructions/3.png', 'slides/instructions/4.png', 'slides/instructions/5.png', 'slides/instructions/6.png', 'slides/instructions/7.png', 'slides/instructions/consentCheck.png', 'instr5.xlsx', 'instr6.xlsx']
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  color = -0.7412, -0.7412, -0.7412
  expName = Bandit
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine pointUpdate
    TextComponent trialCounter_4
      disabled = True
      letterHeight = 0.05
      pos = trialPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $'Current Trial: ' + str(trialNum)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if feedback != "square5":
            currentPoints = currentPoints + eval(feedback)
            thisExp.addData('currPoints', eval(feedback))
        else:
            thisExp.addData('currPoints', "invalid")


        if feedback == "square1":
            selection = "consistent"
        elif feedback == "square2":
            selection = "consistent"
        elif feedback == "square3":
            selection = "noisy"
        elif feedback == "square4":
            selection = "drift"
        else:
            selection = "invalid"

        trialNum = trialNum + 1


        thisExp.addData('totalPoints', currentPoints)
        thisExp.addData('trialType',practiceTrial)
        thisExp.addData('armSelect',selection)
    TextComponent totalPoints_Update
      disabled = True
      letterHeight = 0.05
      pos = pointPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $'Current Points: ' + str(currentPoints)
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    CodeComponent updateFeedback
      Code Type = Auto->JS
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      Begin Routine:
        if varTest == 'INVALID':
            varTest = 'NaN'


        HistFeed[0] = HistFeed[1]
        HistFeed[1] = HistFeed[2]
        HistFeed[2] = varTest
  Routine pracBlockInst
    TextComponent pracInstr
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracInstructText
      wrapWidth = 2
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    PolygonComponent S1_1
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = [-0.1,0.1]
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent S2_1
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1,0.1)
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent S3_1
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1,-0.1)
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent S4_1
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1,-0.1)
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent spaceCont_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent S1Text_1
      letterHeight = 0.05
      pos = (-0.1,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = R
      units = height
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    TextComponent S2Text_1
      colorSpace = lms
      letterHeight = 0.05
      pos = (0.1,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I
      units = height
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    TextComponent S3Text_1
      letterHeight = 0.05
      pos = (-0.1,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = F
      units = height
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    TextComponent S4Text_1
      letterHeight = 0.05
      pos = (0.1,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = J
      units = height
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    TextComponent spaceContText_2
      letterHeight = 0.05
      pos = (0, -.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    CodeComponent resetData_1
      Code Type = Auto->JS
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      Begin Routine:
        pracPoints = 0
        pracTrialNum = 1
    CodeComponent prac_text
      Code Type = Auto->JS
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      Begin Experiment:
        pracInstructText = "Try to find the option that gives the most points"
  Routine pracChoice
    PolygonComponent S1_2
      fillColor = -0.7333, 0.0667, -0.6000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s1pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    PolygonComponent S2_2
      fillColor = 0.8667, -0.2000, -0.0667
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s2pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    PolygonComponent S3_2
      fillColor = -0.4667, -0.0667, 0.3333
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s3pos
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    PolygonComponent S4_2
      fillColor = 0.6000, 0.4667, -0.4667
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s4pos
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    KeyboardComponent pracChoiceKey
      allowedKeys = 'r','i','f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = nothing
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    TextComponent pracTrialCounter
      letterHeight = 0.05
      pos = trialPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'Current Trial: ' + str(pracTrialNum)
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    TextComponent pracPoints_Choice
      letterHeight = 0.05
      pos = pointPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'Current Points: ' + str(pracPoints)
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  Routine pracSelect
    CodeComponent pracSelectLoc
      Code Type = Both
      Begin JS Routine:
        textCol = [1, 1, 1];
        textSize = 0.05;

        pracSelectOutline_1.setFillColor(undefined)

        if ((pracChoiceKey.keys === "r")) {
            selectPos = [(- 0.1), 0.1];
            feedbackPos = [(- 0.1), 0.1];
            sq = util.index(squarePos, selectPos);
            feedback = ("square" + (sq + 1).toString());
        } else {
            if ((pracChoiceKey.keys === "i")) {
                selectPos = [0.1, 0.1];
                feedbackPos = [0.1, 0.1];
                sq = util.index(squarePos, selectPos);
                feedback = ("square" + (sq + 1).toString());
            } else {
                if ((pracChoiceKey.keys === "f")) {
                    selectPos = [(- 0.1), (- 0.1)];
                    feedbackPos = [(- 0.1), (- 0.1)];
                    sq = util.index(squarePos, selectPos);
                    feedback = ("square" + (sq + 1).toString());
                } else {
                    if ((pracChoiceKey.keys === "j")) {
                        selectPos = [0.1, (- 0.1)];
                        feedbackPos = [0.1, (- 0.1)];
                        sq = util.index(squarePos, selectPos);
                        feedback = ("square" + (sq + 1).toString());
                    } else {
                        selectPos = [(- 10), (- 10)];
                        feedbackPos = [0, 0];
                        feedback = "invalid";
                    }
                }
            }
        }
      Begin Routine:
        textCol = (1,1,1)
        textSize = 0.05

        #pracSelectOutline_1.setFillColor(undefined)

        if pracChoiceKey.keys  == ('r'):
            selectPos = (-0.1,0.1)
            feedbackPos = (-0.1,0.1)
            sq = squarePos.index(selectPos)
            feedback = "square" + str(sq+1)
        #    feedback = "square1"
        elif pracChoiceKey.keys   == ('i'):
            selectPos = (0.1,0.1)
            feedbackPos =  (0.1,0.1)
            sq = squarePos.index(selectPos)
            feedback = "square" + str(sq+1)
        #    feedback = "square2"
        elif pracChoiceKey.keys == ('f'):
            selectPos = (-0.1,-0.1)
            feedbackPos = (-0.1,-0.1)
            sq = squarePos.index(selectPos)
            feedback = "square" + str(sq+1)
        #    feedback = "square3"
        elif pracChoiceKey.keys == ('j'):
            selectPos = (0.1,-0.1)
            feedbackPos =  (0.1,-0.1)
            sq = squarePos.index(selectPos)
            feedback = "square" + str(sq+1)
        #    feedback = "square4"
        else:
            selectPos = (-10,-10)
            feedbackPos = (0,0)
            feedback = "invalid"
    PolygonComponent S1_3
      fillColor = -0.7333, 0.0667, -0.6000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s1pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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    PolygonComponent S2_3
      fillColor = 0.8667, -0.2000, -0.0667
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s2pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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    PolygonComponent S3_3
      fillColor = -0.4667, -0.0667, 0.3333
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s3pos
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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    PolygonComponent S4_3
      fillColor = 0.6000, 0.4667, -0.4667
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s4pos
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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    TextComponent pracTrialCounter_2
      letterHeight = 0.05
      pos = trialPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $'Current Trial: ' + str(pracTrialNum)
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    TextComponent pracPointsTotal_2
      letterHeight = 0.05
      pos = pointPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $'Current Points: ' + str(pracPoints)
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    PolygonComponent pracSelectOutline_1
      fillColor = None
      lineColor = 1.0000, 0.6941, -1.0000
      lineWidth = 5
      pos [set every repeat] = $selectPos
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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  Routine pracFeed
    PolygonComponent S1_4
      fillColor = -0.7333, 0.0667, -0.6000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s1pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    PolygonComponent S2_4
      fillColor = 0.8667, -0.2000, -0.0667
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s2pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    PolygonComponent S3_4
      fillColor = -0.4667, -0.0667, 0.3333
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s3pos
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    PolygonComponent S4_4
      fillColor = 0.6000, 0.4667, -0.4667
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s4pos
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    PolygonComponent pracSelectOutline_2
      fillColor = None
      lineColor = 1.0000, 0.6941, -1.0000
      lineWidth = 5
      pos [set every repeat] = $selectPos
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    TextComponent pracPointsTotal_3
      color [set every repeat] = white
      letterHeight [set every repeat] = .05
      pos [set every frame] = pointPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $'Current Points: ' + str(pracPoints)
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    TextComponent pracTrialCounter_3
      letterHeight = 0.05
      pos = trialPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $'Current Trial: ' + str(pracTrialNum)
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    TextComponent pracPointFeedbackText
      color [set every repeat] = $textCol
      letterHeight [set every repeat] = textSize
      pos [set every repeat] = $feedbackPos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $str(eval(feedback))
      units = height
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    CodeComponent transFill
      Code Type = Both
      Begin JS Routine:
        pracSelectOutline_2.setFillColor(undefined);
      Begin Routine:
        #pracSelectOutline_2.setFillColor(undefined)
  Routine pracUpdate
    CodeComponent updatePracData
      Code Type = Both
      Begin JS Routine:
        // https://stackoverflow.com/questions/1527803/generating-random-whole-numbers-in-javascript-in-a-specific-range
        function getRandomInt(min, max) {
            min = Math.ceil(min);
            max = Math.floor(max);
            return Math.floor(Math.random() * (max - min + 1)) + min;
        }

        if ((feedback !== "invalid")) {
            pracPoints += eval(feedback);
            psychoJS.experiment.addData("currPoints", eval(feedback));
        } else {
            psychoJS.experiment.addData("currPoints", "None");
        }
        psychoJS.experiment.addData("totalPoints", pracPoints);
        psychoJS.experiment.addData("trialBlock", "prac");
        psychoJS.experiment.addData("square", feedback);
        pracTrialNum = (pracTrialNum + 1);

        // for (let i = 0; i < 3; i++) {
        //    const pick = getRandomInt(i+1,3);
        //    [squarePos[i], squarePos[pick]] = [squarePos[pick], squarePos[i]];
        //}

        //s1pos = squarePos[0];
        //s2pos = squarePos[1];
        //s3pos = squarePos[2];
        //s4pos = squarePos[3];
      Begin Routine:
        if feedback != "invalid":
            pracPoints += eval(feedback)
            thisExp.addData('currPoints', eval(feedback))
        else:
            thisExp.addData('currPoints', "None")

        thisExp.addData('totalPoints', pracPoints)
        thisExp.addData('trialBlock', "prac")
        thisExp.addData('square', feedback)

        pracTrialNum = pracTrialNum + 1

        # change square pos
        #for i in range(0, 3):
        #    pick = randint(i+1, 4)
        #    squarePos[i], squarePos[pick] = squarePos[pick], squarePos[i]
        #s1pos = squarePos[0]
        #s2pos = squarePos[1]
        #s3pos = squarePos[2]
        #s4pos = squarePos[3]
  Routine realBlockInstr
    TextComponent instr
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Below is a reminder of the keys to press to select a square:
      wrapWidth = 2
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    PolygonComponent S1_5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = [-0.1,0]
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent S2_5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1,0)
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent S3_5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1,-0.2)
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent S4_5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1,-0.2)
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent spaceCont_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent S1Key_5
      letterHeight = 0.05
      pos = (-0.1,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = R
      units = height
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    TextComponent S2Key_5
      colorSpace = lms
      letterHeight = 0.05
      pos = (0.1,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I
      units = height
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    TextComponent S3Key_5
      letterHeight = 0.05
      pos = (-0.1,-0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = F
      units = height
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    TextComponent S4Key_5
      letterHeight = 0.05
      pos = (0.1,-0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = J
      units = height
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    TextComponent spaceContText_3
      letterHeight = 0.05
      pos = (0, -.65)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    CodeComponent resetText_2
      Code Type = Py
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      Begin Routine:
        points = 0
        trialNum = 1

        thisExp.addData('conditionsFile', cond_file)
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if volEnviro == True:

                blockIntroText = f"In this environment, the best option (that gives the most points) WILL CHANGE SUDDENLY across a block."


        else:

            if expVal == 1:
                 blockIntroText = f"In this environment, the best option (that gives the most points) WILL CHANGE throughout a block."
            else:
                 blockIntroText = f"In this environment, the best option (that gives the most points) WILL STAY CONSISTENT across a block."
    TextComponent ReminderBlock
      letterHeight = 0.08
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $blockIntroText
    CodeComponent RealTask_SquareLoc
      Code Type = Both
      Begin JS Routine:
        // https://stackoverflow.com/questions/1527803/generating-random-whole-numbers-in-javascript-in-a-specific-range
        function getRandomInt(min, max) {
            min = Math.ceil(min);
            max = Math.floor(max);
            return Math.floor(Math.random() * (max - min + 1)) + min;
        }

        for (let i = 0; i < 3; i++) {
            const pick = getRandomInt(i+1,3);
            [squarePos[i], squarePos[pick]] = [squarePos[pick], squarePos[i]];
        }
        s1pos = squarePos[0];
        s2pos = squarePos[1];
        s3pos = squarePos[2];
        s4pos = squarePos[3];
      Begin Routine:
        # change square pos
        for i in range(0, 3):
            pick = randint(i+1, 4)
            squarePos[i], squarePos[pick] = squarePos[pick], squarePos[i]
        s1pos = squarePos[0]
        s2pos = squarePos[1]
        s3pos = squarePos[2]
        s4pos = squarePos[3]
  Routine pracBlockComplete
    TextComponent pracCompleteText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have completed the practice blocks! Next you will start the real task.

        Press SPACE to continue.
    KeyboardComponent spaceCont_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        condVal =np.random.rand()

        if condVal > .5:
             startVal = 1
        else:
            startVal = 0
      Begin JS Experiment:
        condVal = Math.random()

        if ((condVal > 0.5)) {
            startVal = 1;
        } else {
            startVal = 0;
        }
  Routine experimentEnd
    KeyboardComponent debriefControlKey
      allowedKeys = 'right', 'left', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_2
      image [set every repeat] = $debrief_slide
      size = (1.3, 1.3)
      startVal [time (s)] = 0.0
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  Routine realChoice
    PolygonComponent S1_6
      fillColor [set every repeat] = $s1_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s1pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    PolygonComponent S2_6
      fillColor [set every repeat] = $s2_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s2pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    PolygonComponent S3_6
      fillColor [set every repeat] = $s3_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s3pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    PolygonComponent S4_6
      fillColor [set every repeat] = $s4_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s4pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    KeyboardComponent choiceKey
      allowedKeys = 'r','i','f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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    TextComponent trialCounter_1
      letterHeight = 0.05
      pos = trialPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'Current Trial: ' + str(trialNum)
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    TextComponent pointsTotal_1
      letterHeight = 0.05
      pos = pointPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'Current Points: ' + str(points)
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    TextComponent blockCounter_1
      letterHeight = 0.05
      pos = blockPosition
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'Current Block: ' + str(currentBlock)
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  Routine realSelect
    CodeComponent selectFeedback
      Code Type = Both
      Begin JS Routine:
        textCol = [1, 1, 1];
        textSize = 0.05;
        selectOutline_1.setFillColor(undefined);
        if ((choiceKey.keys === "r")) {
            selectPos = [(- 0.1), 0.1];
            feedbackPos = [(- 0.1), 0.1];
            sq = util.index(squarePos, selectPos);
            feedback = ("square" + (sq + 1).toString());
        } else {
            if ((choiceKey.keys === "i")) {
                selectPos = [0.1, 0.1];
                feedbackPos = [0.1, 0.1];
                sq = util.index(squarePos, selectPos);
                feedback = ("square" + (sq + 1).toString());
            } else {
                if ((choiceKey.keys === "f")) {
                    selectPos = [(- 0.1), (- 0.1)];
                    feedbackPos = [(- 0.1), (- 0.1)];
                    sq = util.index(squarePos, selectPos);
                    feedback = ("square" + (sq + 1).toString());
                } else {
                    if ((choiceKey.keys === "j")) {
                        selectPos = [0.1, (- 0.1)];
                        feedbackPos = [0.1, (- 0.1)];
                        sq = util.index(squarePos, selectPos);
                        feedback = ("square" + (sq + 1).toString());
                    } else {
                        selectPos = [(- 10), (- 10)];
                        feedbackPos = [0, 0];
                        feedback = "invalid";
                    }
                }
            }
        }

        if (feedback != "invalid") {
            feedbackPoints = util.round(eval(feedback));
        } else {
            feedbackPoints = eval(feedback).toString();
        }
      Begin Routine:
        textCol = (1,1,1)
        textSize = 0.05
        #selectOutline_1.setFillColor(undefined)

        if choiceKey.keys  == ('r'):
            selectPos = (-.1,.1)
            feedbackPos =  (-.1,.1)
            sq = squarePos.index(selectPos)
            feedback = "square" + str(sq+1)
        #    feedback = "square1"
        elif choiceKey.keys   == ('i'):
            selectPos = (.1,.1)
            feedbackPos =  (.1,.1)
            sq = squarePos.index(selectPos)
            feedback = "square" + str(sq+1)
        #    feedback = "square2"
        elif choiceKey.keys == ('f'):
            selectPos = (-.1,-.1)
            feedbackPos = (-.1,-.1)
            sq = squarePos.index(selectPos)
            feedback = "square" + str(sq+1)
        #    feedback = "square3"
        elif choiceKey.keys == ('j'):
            selectPos = (.1,-.1)
            feedbackPos =  (.1,-.1)
            sq = squarePos.index(selectPos)
            feedback = "square" + str(sq+1)
        #    feedback = "square4"
        else:
            selectPos = (-10,-10)
            feedbackPos = (0,0)
            feedback = "invalid"

        if feedback != "invalid":
            feedbackPoints = round(eval(feedback))
        else:
            feedbackPoints = eval(feedback)
    PolygonComponent S1_7
      fillColor [set every repeat] = $s1_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s1pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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    PolygonComponent S2_7
      fillColor [set every repeat] = $s2_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s2pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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    PolygonComponent S3_7
      fillColor [set every repeat] = $s3_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s3pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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    PolygonComponent S4_7
      fillColor [set every repeat] = $s4_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s4pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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    TextComponent trialCounter_2
      letterHeight = 0.05
      pos = trialPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $'Current Trial: ' + str(trialNum)
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    TextComponent pointsTotal_2
      letterHeight = 0.05
      pos = pointPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $'Current Points: ' + str(points)
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    TextComponent blockCounter_2
      letterHeight = 0.05
      pos = blockPosition
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text [set every repeat] = $'Current Block: ' + str(currentBlock)
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    PolygonComponent selectOutline_1
      fillColor = None
      lineColor = 1.0000, 0.6941, -1.0000
      lineWidth = 5
      pos [set every repeat] = $selectPos
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      units = height
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  Routine realFeed
    PolygonComponent S1_8
      fillColor [set every repeat] = $s1_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s1pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    PolygonComponent S2_8
      fillColor [set every repeat] = $s2_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s2pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    PolygonComponent S3_8
      fillColor [set every repeat] = $s3_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s3pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    PolygonComponent S4_8
      fillColor [set every repeat] = $s4_col
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = s4pos
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    PolygonComponent selectOutline_2
      fillColor = None
      lineColor = 1.0000, 0.6941, -1.0000
      lineWidth = 5
      pos [set every repeat] = $selectPos
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = height
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    TextComponent pointsTotal_3
      color [set every repeat] = white
      letterHeight [set every repeat] = .05
      pos [set every frame] = pointPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $'Current Points: ' + str(points)
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    TextComponent trialCounter_3
      letterHeight = 0.05
      pos = trialPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $'Current Trial: ' + str(trialNum)
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    TextComponent blockCounter_3
      letterHeight = 0.05
      pos = blockPosition
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $'Current Block: ' + str(currentBlock)
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    TextComponent pointFeedbackText
      color [set every repeat] = $textCol
      letterHeight [set every repeat] = textSize
      pos [set every repeat] = $feedbackPos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $str(feedbackPoints)
      units = height
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    CodeComponent transFill_2
      Code Type = Both
      Begin JS Routine:
        selectOutline_2.setFillColor(undefined);
      Begin Routine:
        #selectOutline_2.setFillColor(undefined)
  Routine realUpdate
    CodeComponent updateData
      Code Type = Both
      Begin JS Routine:
        // https://stackoverflow.com/questions/1527803/generating-random-whole-numbers-in-javascript-in-a-specific-range
        function getRandomInt(min, max) {
            min = Math.ceil(min);
            max = Math.floor(max);
            return Math.floor(Math.random() * (max - min + 1)) + min;
        }

        if ((feedback !== "invalid")) {
            points += feedbackPoints;
            psychoJS.experiment.addData("currPoints", feedbackPoints);
        } else {
            psychoJS.experiment.addData("currPoints", "None");
        }
        psychoJS.experiment.addData("totalPoints", points);
        psychoJS.experiment.addData("trialBlock", block);
        psychoJS.experiment.addData("square", feedback);
        trialNum += 1;

        //for (let i = 0; i < 3; i++) {
        //    const pick = getRandomInt(i+1,3);
        //    [squarePos[i], squarePos[pick]] = [squarePos[pick], squarePos[i]];
        //}
        //s1pos = squarePos[0];
        //s2pos = squarePos[1];
        //s3pos = squarePos[2];
        //s4pos = squarePos[3];
      Begin Routine:
        if feedback != "invalid":
            points += feedbackPoints
            thisExp.addData('currPoints', feedbackPoints)
        else:
            thisExp.addData('currPoints', "None")
        thisExp.addData('totalPoints', points)
        thisExp.addData('trialBlock', block)
        thisExp.addData('square', feedback)

        trialNum += 1

        # change square pos
        #for i in range(0, 3):
        #    pick = randint(i+1, 4)
        #    squarePos[i], squarePos[pick] = squarePos[pick], squarePos[i]
        #s1pos = squarePos[0]
        #s2pos = squarePos[1]
        #s3pos = squarePos[2]
        #s4pos = squarePos[3]
  Routine blocks
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        numBlocks = 9
        currentBlock = 1
        pointPosition = (0, -.5)
        trialPosition = (0, -.55)
        blockPosition = (0, -.6)

        squarePos = [(0.1, 0.1), (-0.1, 0.1), (0.1, -0.1), (-0.1, -0.1)]

        shuffle(squarePos)

        s1pos = squarePos[0]
        s2pos = squarePos[1]
        s3pos = squarePos[2]
        s4pos = squarePos[3]
    CodeComponent startCode_Test
      Code Type = Both
      Begin Experiment:
        randomVal =np.random.rand()

        if randomVal > .25:
              # Non-Stationary
             instrLoc = "instr5.xlsx";
             expVal = 1
             pracCond = "conditions/prac_conditions_win.csv"
             stationary = False
        else:
            # Stationary
             instrLoc = "instr6.xlsx";
             expVal = 2
             pracCond = "conditions/prac_conditions_win.csv"
             stationary = True


        # Stationary
        # instrLoc = "instr6.xlsx";
        # expVal = 2
        # pracCond = "conditions/prac_conditions_win.csv"
        # stationary = True
      Begin JS Experiment:
        randomVal = Math.random()

        if ((randomVal > 0.25)) {
            instrLoc = "instr5.xlsx";
            expVal = 1;
            pracCond = "conditions/prac_conditions_win.csv"
            stationary = false;
        } else {
            instrLoc = "instr6.xlsx";
            expVal = 2;
            pracCond = "conditions/prac_conditions_win.csv"
            stationary = true;
        }

        // Stationary
        //instrLoc = "instr6.xlsx";
        //expVal = 2;
        //pracCond = "conditions/prac_conditions_win.csv"
        //stationary = true;
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
  Routine rewardSetUp
    CodeComponent rewardSetUpCode
      Code Type = Both
      Begin JS Routine:
        firstCond = true;

        if ((startVal === 0)) {
            volEnviro = false;
            if ((expVal === 1)) {
                stationary = false;
                conds = "conditions/nonstat_conds_win.csv";
                condTxt = "In this environment, the best option (the option which gives the most amount of points) will change throughout a block. There will be a total of 3 blocks with 100 trials each.";
                numBlocks = 3;
                } else {
            if ((expVal === 2)) {
                stationary = true;
                conds = "conditions/stat_conds_win.csv";
                condTxt = "In this environment, the best option (the option which gives the most amount of points on AVERAGE) will stay consistent across a block. Of course, there will be some variation in the points given by an option (the points given by an option will go up and down slightly on a trial by trial basis).  There will be a total of 6 blocks with 50 trials each.";
                numBlocks = 6;
                       }
            }
        } else {
            volEnviro = true;
            stationary = false
            conds = "conditions/vol_conds_win.csv";
            condTxt = "In this environment, the best option (the option which gives the most amount of points) will change suddenly  throughout a block. There will be a total of 3 blocks with 100 trials each.";
            numBlocks = 3;

        }

        s1_col = "#44AA99";
        s2_col = "#882255";
        s3_col = "#332288";
        s4_col = "#DDCC77";

        //const generateRewards = () => {
        //    const mean = 0;
        //    const stdev = 1;
        //    const arms = 4;
        //    const decay = 0.1;
        //
        //    let means;
        //    let walkSize;
        //    let noise;
        //
        //    // https://stackoverflow.com/questions/25582882/javascript-math-random-normal-distribution-gaussian-bell-curve
        //    // Standard Normal variate using Box-Muller transform.
        //    function gaussianRandom(mean=0, stdev=1) {
        //        const u = 1 - Math.random(); // Converting [0,1) to (0,1]
        //        const v = Math.random();
        //        const z = Math.sqrt( -2.0 * Math.log( u ) ) * Math.cos( 2.0 * Math.PI * v );
        //        // Transform to the desired mean and standard deviation:
        //        return z * stdev + mean;
        //    }
        //
        //    function reset() {
        //        means = new Array(arms).fill(0).map(() => gaussianRandom());
        //        means = updateArms();
        //        return means
        //    }
        //
        //    function updateArms() {
        //        for (let i=0; i<arms; i++) {
        //            walkSize = gaussianRandom();
        //            means[i] += walkSize * decay;
        //        }
        //        return means;
        //    }
        //
        //    function getAllRewards(trials, means) {
        //        let trueRewards = new Array(trials).fill(0).map(() => new Array(arms).fill(0));
        //        for (let trial=0; trial<trials; trial++) {
        //            if (!stationary) {
        //                updateArms();
        //            }
        //        for (let i=0; i<arms; i++) {
        //            if (stationary) {
        //                noise = gaussianRandom(stdev=0.05);
        //            } else {
        //                noise = 0;
        //            }
        //            trueRewards[trial][i] += means[i]
        //            trueRewards[trial][i] = Math.floor(trueRewards[trial][i] * 10)
        //            }
        //        }
        //        return trueRewards;
        //    }
        //
        //    means = reset();
        //    let rewards = getAllRewards(5, means);
        //    return rewards;
        //}
        //
        //rewardsList = generateRewards();
      Begin Routine:
        firstCond = True

        if startVal == 0:
            volEnviro = False
            if expVal == 1:
                numBlocks = 3
                stationary = False
                conds = "conditions/nonstat_conds_win.csv"
                condTxt = f"In this environment, the best option (the option which gives the most amount of points) will change throughout a block. There will be a total of 3 blocks with 100 trials each."

            elif expVal == 2:
                stationary = True
                numBlocks = 6
                conds = "conditions/stat_conds_win.csv"
                condTxt = f"In this environment, the best option (the option which gives the most amount of points) will stay consistent across a block. Of course, there will be some variation in the points given by an option.  There will be a total of 6 blocks with 50 trials each."

        else:
            volEnviro = True
            stationary = False
            numBlocks = 3
            conds = "conditions/vol_conds_win.csv"
            condTxt = f"In this environment, the best option (the option which gives the most amount of points) will change suddenly throughout a block. There will be a total of 3 blocks with 100 trials each."

        s1_col = "#44AA99"
        s2_col = "#882255"
        s3_col = "#332288"
        s4_col = "#DDCC77"

        #def reset():
        #    means = np.random.normal(mean, stdev, arms)
        #    updateArms(means)
        #    return means
        #
        #def updateArms(means):
        #    for i in range(arms):
        #        walkSize = np.random.normal(mean, stdev)
        #        means[i] += (walkSize * decay)
        #
        #def getAllRewards(trials, means):
        #    trueRewards = np.zeros((trials, arms))
        #    for trial in range(trials):
        #        if not stationary:
        #            updateArms(means)
        #        for i in range(arms):
        #            if stationary:
        #                noise = np.random.normal(0, 0.05)
        #            else:  # confirm: add noise to the non-stationary case? currently no
        #                noise = 0
        #            trueRewards[trial, i] += means[i] + noise
        #            trueRewards[trial, i] = math.floor(trueRewards[trial, i] * 10)
        #    return trueRewards
        #
        #means = reset()
        #rewards = getAllRewards(5, means)  # 100 trials
    TextComponent spaceContText
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press Space to Continue
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    KeyboardComponent spaceCont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent summaryText
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $condTxt
      wrapWidth = 1.5
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  Routine blockUpdate
    CodeComponent blockUpdateCode
      Code Type = Auto->JS
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      Begin Routine:
        blocksLeft = numBlocks - currentBlock

        if blocksLeft == 1:
            blocksLeftText = f"You have completed block {currentBlock}. There is 1 block left."
        else:
            blocksLeftText = f"You have completed block {currentBlock}. There are {blocksLeft} blocks left."

        if stationary == False and currentBlock == 3:
            blockLoop.finished=True

        if stationary and currentBlock == 6:
            blockLoop.finished=True

        currentBlock += 1
    TextComponent blockEndText
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $blocksLeftText
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    TextComponent spaceContText_4
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue to the questionnaire.
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    KeyboardComponent spaceCont_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pause
    PolygonComponent S1
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = [-0.1,0.1]
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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    PolygonComponent S2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1,0.1)
      saveStartStop = False
      shape = rectangle
      size = [0.2,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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    PolygonComponent S3
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1,-0.1)
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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    PolygonComponent S4
      fillColor = 0.0039, -1.0000, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1,-0.1)
      saveStartStop = False
      shape = rectangle
      size = [.2,.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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  Routine instrPrep
    CodeComponent slideControlCode
      Code Type = Auto->JS
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      Begin Experiment:
        currRowInstr = 0
      Begin Routine:
        if instrControlKey.keys == 'right':
            if currRowInstr != 6:  # number of slides - 1
                currRowInstr += 1
        elif instrControlKey.keys == 'left':
            if currRowInstr != 0:
                currRowInstr -= 1
        elif instrControlKey.keys == 'space':
            if currRowInstr == 6:
                instrController.finished = True
  Routine welcome
    KeyboardComponent instrControlKey
      allowedKeys = 'right', 'left', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image
      image [set every repeat] = $instr_slide2
      size = (1.3, 1.3)
      startVal [time (s)] = 0.0
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  Routine debriefPrep
    CodeComponent slideControlCode_2
      Code Type = Auto->JS
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      Begin Experiment:
        currRowDebrief = 0
      Begin Routine:
        if debriefControlKey.keys == 'right':
            if currRowDebrief != 4:  # number of slides - 1
                currRowDebrief += 1
        elif debriefControlKey.keys == 'left':
            if currRowDebrief != 0:
                currRowDebrief -= 1
        elif debriefControlKey.keys == 'space':
            if currRowDebrief == 4:  # number of slides - 1
                debriefController.finished = True
  Routine rewardChange
    CodeComponent rewardChangeCode
      Code Type = Auto->JS
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      Begin Routine:
        # switch conditions type
        if startVal == 0:
            startVal = 1
        else:
            startVal = 0

        if startVal == 0:
            volEnviro = False
            if expVal == 1:
                conds = "conditions/nonstat_conds_win.csv"
                numBlocks = 3;
                condChangeTxt = "You are now entering a new environment - your goal is to win as many points as possible. The best option will change throughout a block. There will be a total of 3 blocks with 100 trials each. Please take a moment before entering the new environment."
            elif expVal == 2:
                stationary = True
                numBlocks = 6;
                conds = "conditions/stat_conds_win.csv"
                condChangeTxt = "You are now entering a new environment - your goal is to win as many points as possible. The best option will stay consistent across a block. There will be a total of 6 blocks with 50 trials each. Please take a moment before entering the new environment."

        else:
            volEnviro = True
            stationary = False
            conds = "conditions/vol_conds_win.csv"
            numBlocks = 3;
            condChangeTxt = "You are now entering a new environment - your goal is to win as many points as possible. The best option will change suddenly throughout a block. There will be a total of 3 blocks with 100 trials each. Please take a moment before entering the new environment."

        if not firstCond:
            condChangeTxt = "You have completed the task! Now, you will complete a series of questionnaries."

        currentBlock = 1
        firstCond = False

        s1_col = "#009E73"
        s2_col = "#CC79A7"
        s3_col = "#56B4E9"
        s4_col = "#E69F00"
    TextComponent rewardChangeText
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $condChangeTxt
      wrapWidth = 1.5
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    TextComponent spaceContText_5
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent spaceCont_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent
    ImageComponent image_3
      image = slides/instructions/consentCheck.png
      size = (1.3, 1.3)
      startVal [time (s)] = 0.0
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    PolygonComponent consentCheck
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = consentCheck
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instruct
    KeyboardComponent instrControlKey_2
      allowedKeys = 'right', 'left', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_4
      image [set every repeat] = $instr_slide
      size = (1.3, 1.3)
      startVal [time (s)] = 0.0
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  Routine control
    CodeComponent slideControlCode_3
      Code Type = Auto->JS
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      Begin Experiment:
        currRowInstr2 = 0
      Begin Routine:
        if instrControlKey_2.keys == 'right':
            if currRowInstr2 != 2:  # number of slides - 1
                currRowInstr2 += 1
        elif instrControlKey_2.keys == 'left':
            if currRowInstr2 != 0:
                currRowInstr2 -= 1
        elif instrControlKey_2.keys == 'space':
            if currRowInstr2 == 2:  # number of slides - 1
                icontrol.finished = True
  Routine countdown
    TextComponent countdownText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        startTime = new Date();
        countdownText.text = ''
      Begin Routine:
        countdownText.text = ''
      Each Frame:
        countdownText.text = str(round(3+routineTimer.getTime()))
      Each JS Frame:
        leftTime = new Date();
        timeelapsed = (startTime - leftTime)/1000
        countdownText.text = Math.round(3+timeelapsed)
    CodeComponent SquarePos_Prac
      Code Type = Both
      Begin Experiment:
        # change square pos
        for i in range(0, 3):
            pick = randint(i+1, 4)
            squarePos[i], squarePos[pick] = squarePos[pick], squarePos[i]
        s1pos = squarePos[0]
        s2pos = squarePos[1]
        s3pos = squarePos[2]
        s4pos = squarePos[3]
      Begin JS Experiment:
         function getRandomInt(min, max) {
            min = Math.ceil(min);
            max = Math.floor(max);
            return Math.floor(Math.random() * (max - min + 1)) + min;
        }

         for (let i = 0; i < 3; i++) {
            const pick = getRandomInt(i+1,3);
            [squarePos[i], squarePos[pick]] = [squarePos[pick], squarePos[i]];
        }

        s1pos = squarePos[0];
        s2pos = squarePos[1];
        s3pos = squarePos[2];
        s4pos = squarePos[3];
  Routine blank
    TextComponent blank1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine demographicsQuest
    CodeComponent iframe
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('questionnaires/demographics.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['age'] = psychoJS.experiment._currentTrialData['Qage'];
        expInfo['gender'] = psychoJS.experiment._currentTrialData['Qgender'];
        expInfo['gender_text'] = psychoJS.experiment._currentTrialData['Qgender_text'];
        expInfo['hand'] = psychoJS.experiment._currentTrialData['Qhand'];
        expInfo['education'] = psychoJS.experiment._currentTrialData['Qeducation'];
        expInfo['english'] = psychoJS.experiment._currentTrialData['Qenglish'];
  Routine blockEndQuest
    CodeComponent iframe_2
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('questionnaires/blockEnd.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['confidence'] = psychoJS.experiment._currentTrialData['Qconfidence'];
        expInfo['bestSquare'] = psychoJS.experiment._currentTrialData['QbestSquare'];
        expInfo['tryMultiple'] = psychoJS.experiment._currentTrialData['QtryMultiple'];
        expInfo['squareChange'] = psychoJS.experiment._currentTrialData['QsquareChange'];
  Routine contRoutine
    KeyboardComponent spaceCont_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent blockUpdateCode_2
      Code Type = Auto->JS
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      Begin Routine:
        blocksLeft = numBlocks - currentBlock

        if blocksLeft == -1:
            contText = "Press SPACE to continue."
        else:
            contText = "Press SPACE to move on to the next block."
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $contText
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  Routine curiosityQuest
    CodeComponent iframe_4
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('questionnaires/curiosity.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['CUR1'] = psychoJS.experiment._currentTrialData['QCUR1'];
        expInfo['CUR2'] = psychoJS.experiment._currentTrialData['QCUR2'];
        expInfo['CUR3'] = psychoJS.experiment._currentTrialData['QCUR3'];
        expInfo['CUR4'] = psychoJS.experiment._currentTrialData['QCUR4'];
        expInfo['CUR5'] = psychoJS.experiment._currentTrialData['QCUR5'];
        expInfo['CUR6'] = psychoJS.experiment._currentTrialData['QCUR6'];
        expInfo['CUR7'] = psychoJS.experiment._currentTrialData['QCUR7'];
        expInfo['CUR8'] = psychoJS.experiment._currentTrialData['QCUR8'];
        expInfo['CUR9'] = psychoJS.experiment._currentTrialData['QCUR9'];
        expInfo['CUR10'] = psychoJS.experiment._currentTrialData['QCUR10'];
  Routine cogQuest
    CodeComponent iframe_5
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('questionnaires/cognition.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['C1'] = psychoJS.experiment._currentTrialData['QC1'];
        expInfo['C2'] = psychoJS.experiment._currentTrialData['QC2'];
        expInfo['C3'] = psychoJS.experiment._currentTrialData['QC3'];
        expInfo['C4'] = psychoJS.experiment._currentTrialData['QC4'];
        expInfo['C5'] = psychoJS.experiment._currentTrialData['QC5'];
        expInfo['C6'] = psychoJS.experiment._currentTrialData['QC6'];
        expInfo['C7'] = psychoJS.experiment._currentTrialData['QC7'];
        expInfo['C8'] = psychoJS.experiment._currentTrialData['QC8'];
        expInfo['C9'] = psychoJS.experiment._currentTrialData['QC9'];
        expInfo['C10'] = psychoJS.experiment._currentTrialData['QC10'];
  Routine riskQuest
    CodeComponent iframe_6
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('questionnaires/risk.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['RISK1'] = psychoJS.experiment._currentTrialData['QRISK1'];
        expInfo['RISK2'] = psychoJS.experiment._currentTrialData['QRISK2'];
        expInfo['RISK3'] = psychoJS.experiment._currentTrialData['QRISK3'];
        expInfo['RISK4'] = psychoJS.experiment._currentTrialData['QRISK4'];
        expInfo['RISK5'] = psychoJS.experiment._currentTrialData['QRISK5'];
        expInfo['RISK6'] = psychoJS.experiment._currentTrialData['QRISK6'];
        expInfo['RISK7'] = psychoJS.experiment._currentTrialData['QRISK7'];
  Routine questPrep
    KeyboardComponent spaceCont_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the task! Now, you will complete a series of questionnaries.
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    TextComponent spaceContText_6
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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  Routine questNext
    KeyboardComponent spaceCont_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press SPACE to continue.
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  Routine taskEnd_1
    CodeComponent iframe_3
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('questionnaires/taskEnd_1.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['T1_1_1'] = psychoJS.experiment._currentTrialData['QT1_1_1'];
        expInfo['T1_1_2'] = psychoJS.experiment._currentTrialData['QT1_1_2'];
        expInfo['T1_1_3'] = psychoJS.experiment._currentTrialData['QT1_1_3'];
        expInfo['T1_1_4'] = psychoJS.experiment._currentTrialData['QT1_1_4'];
        expInfo['T1_1_5'] = psychoJS.experiment._currentTrialData['QT1_1_5'];
        expInfo['T1_1_5_text'] = psychoJS.experiment._currentTrialData['QT1_1_5_text'];
        expInfo['T1_2_1'] = psychoJS.experiment._currentTrialData['QT1_2_1'];
        expInfo['T1_2_2'] = psychoJS.experiment._currentTrialData['QT1_2_2'];
        expInfo['T1_2_3'] = psychoJS.experiment._currentTrialData['QT1_2_3'];
        expInfo['T1_2_4'] = psychoJS.experiment._currentTrialData['QT1_2_4'];
        expInfo['T1_2_5'] = psychoJS.experiment._currentTrialData['QT1_2_5'];
        expInfo['T1_2_6'] = psychoJS.experiment._currentTrialData['QT1_2_6'];
        expInfo['T1_2_6_text'] = psychoJS.experiment._currentTrialData['QT1_2_6_text'];
        expInfo['T2_3_1'] = psychoJS.experiment._currentTrialData['QT2_3_1'];
        expInfo['T2_3_2'] = psychoJS.experiment._currentTrialData['QT2_3_2'];
        expInfo['T2_3_3'] = psychoJS.experiment._currentTrialData['QT2_3_3'];
        expInfo['T2_3_4'] = psychoJS.experiment._currentTrialData['QT2_3_4'];
        expInfo['T2_3_4_text'] = psychoJS.experiment._currentTrialData['QT2_3_4_text'];
        expInfo['T2_1_1'] = psychoJS.experiment._currentTrialData['QT2_1_1'];
        expInfo['T2_1_2'] = psychoJS.experiment._currentTrialData['QT2_1_2'];
        expInfo['T2_1_3'] = psychoJS.experiment._currentTrialData['QT2_1_3'];
        expInfo['T2_1_4'] = psychoJS.experiment._currentTrialData['QT2_1_4'];
        expInfo['T2_1_5'] = psychoJS.experiment._currentTrialData['QT2_1_5'];
        expInfo['T2_1_5_text'] = psychoJS.experiment._currentTrialData['QT2_1_5_text'];
        expInfo['T2_2_1'] = psychoJS.experiment._currentTrialData['QT2_2_1'];
        expInfo['T2_2_2'] = psychoJS.experiment._currentTrialData['QT2_2_2'];
        expInfo['T2_2_3'] = psychoJS.experiment._currentTrialData['QT2_2_3'];
        expInfo['T2_2_4'] = psychoJS.experiment._currentTrialData['QT2_2_4'];
        expInfo['T2_2_5'] = psychoJS.experiment._currentTrialData['QT2_2_5'];
        expInfo['T2_2_6'] = psychoJS.experiment._currentTrialData['QT2_2_6'];
        expInfo['T2_2_6_text'] = psychoJS.experiment._currentTrialData['QT2_2_6_text'];
        expInfo['T2_3_1'] = psychoJS.experiment._currentTrialData['QT2_3_1'];
        expInfo['T2_3_2'] = psychoJS.experiment._currentTrialData['QT2_3_2'];
        expInfo['T2_3_3'] = psychoJS.experiment._currentTrialData['QT2_3_3'];
        expInfo['T2_3_4'] = psychoJS.experiment._currentTrialData['QT2_3_4'];
        expInfo['T2_3_4_text'] = psychoJS.experiment._currentTrialData['QT2_3_4_text'];
  Routine taskEnd_2
    CodeComponent iframe_taskend2
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('questionnaires/taskEnd_2.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
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  Routine Space_Start
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent Space_Cont4
      letterHeight = 0.08
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press Space To Continue
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Flow
  Routine blocks
  LoopInitiator instrController loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    LoopInitiator instrLoop loopType="TrialHandler"
      Selected rows = $str(currRowInstr)
      conditionsFile = slides/instructions/instr.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'instr_slide': 'slides/instructions/1.png'},
        {'instr_slide': 'slides/instructions/2.png'},
        {'instr_slide': 'slides/instructions/3.png'},
        {'instr_slide': 'slides/instructions/4.png'},
        {'instr_slide': 'slides/instructions/5.png'},
        {'instr_slide': 'slides/instructions/6.png'},
        {'instr_slide': 'slides/instructions/7.png'}]
      Routine welcome
    LoopTerminator instrLoop
    Routine instrPrep
  LoopTerminator instrController
  Routine consent
  Routine blank
  Routine demographicsQuest
  Routine Space_Start
  LoopInitiator icontrol loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    LoopInitiator iloop loopType="TrialHandler"
      Selected rows = $str(currRowInstr2)
      conditionsFile = $instrLoc
      loopType = sequential
      nReps = 1
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      Routine instruct
    LoopTerminator iloop
    Routine control
  LoopTerminator icontrol
  Routine pracBlockInst
  Routine countdown
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = $pracCond
    loopType = sequential
    nReps = 1
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    Routine pracChoice
    Routine pracSelect
    Routine pracFeed
    Routine pracUpdate
  LoopTerminator pracTrials
  Routine pracBlockComplete
  Routine rewardSetUp
  LoopInitiator condType loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator blockLoop loopType="TrialHandler"
      conditionsFile = $conds
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cond_file', 'conditions/base_block1.csv')]),
        OrderedDict([('cond_file', 'conditions/b2.csv')])]
      Routine realBlockInstr
      LoopInitiator realTrials loopType="TrialHandler"
        conditionsFile = $cond_file
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('Trial', 0), ('block', 1), ('square1', 72.2), ('square2', 58.3), ('square3', 69.9), ('square4', 65.7), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 1), ('block', 1), ('square1', 74.9), ('square2', 63.7), ('square3', 65.8), ('square4', 68.9), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 2), ('block', 1), ('square1', 74.7), ('square2', 62.4), ('square3', 61.8), ('square4', 79.1), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 3), ('block', 1), ('square1', 68.2), ('square2', 61.6), ('square3', 63.4), ('square4', 69.2), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 4), ('block', 1), ('square1', 82.5), ('square2', 63.0), ('square3', 63.6), ('square4', 72.6), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 5), ('block', 1), ('square1', 66.4), ('square2', 70.2), ('square3', 64.8), ('square4', 72.8), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 6), ('block', 1), ('square1', 73.5), ('square2', 65.4), ('square3', 62.0), ('square4', 65.2), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 7), ('block', 1), ('square1', 70.3), ('square2', 61.1), ('square3', 65.3), ('square4', 65.7), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 8), ('block', 1), ('square1', 78.0), ('square2', 62.7), ('square3', 66.9), ('square4', 68.2), ('invalid', 'No Choice')]),
          OrderedDict([('Trial', 9), ('block', 1), ('square1', 73.8), ('square2', 67.5), ('square3', 66.5), ('square4', 67.9), ('invalid', 'No Choice')])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
        Routine realChoice
        Routine realSelect
        Routine realFeed
        Routine realUpdate
      LoopTerminator realTrials
      Routine blockUpdate
      Routine blockEndQuest
      Routine blank
      Routine contRoutine
    LoopTerminator blockLoop
    Routine rewardChange
  LoopTerminator condType
  Routine taskEnd_1
  Routine blank
  Routine questNext
  Routine taskEnd_2
  Routine blank
  Routine questNext
  Routine curiosityQuest
  Routine blank
  Routine questNext
  Routine cogQuest
  Routine blank
  Routine questNext
  Routine riskQuest
  Routine blank
  Routine questNext
  LoopInitiator debriefController loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    LoopInitiator debriefLoop loopType="TrialHandler"
      Selected rows = $str(currRowDebrief)
      conditionsFile = slides/debrief/debrief.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'debrief_slide': 'slides/debrief/1.png'},
        {'debrief_slide': 'slides/debrief/2.png'}]
      Routine experimentEnd
    LoopTerminator debriefLoop
    Routine debriefPrep
  LoopTerminator debriefController
